CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "G3BP1")
    Name to assign these images:G3Bp1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "HUR")
    Name to assign these images:HUR
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "tiar")
    Name to assign these images:TIAR
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:G3Bp1
    Name the primary objects to be identified:cell_G3Bp1
    Typical diameter of objects, in pixel units (Min,Max):25,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyTertiaryObjects:[module_num:7|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
    Select the larger identified objects:cell_G3Bp1
    Select the smaller identified objects:nuclei
    Name the tertiary objects to be identified:Cytoplasm_G3Bp1
    Shrink smaller object prior to subtraction?:No

MeasureObjectIntensity:[module_num:8|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
    Select images to measure:G3Bp1
    Select objects to measure:Cytoplasm_G3Bp1, cell_G3Bp1, nuclei

MeasureObjectIntensity:[module_num:9|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
    Select images to measure:DAPI
    Select objects to measure:cell_G3Bp1, nuclei

ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Library/CloudStorage/OneDrive-BABRAHAM/experiments/OOPS_AB023_titration/tiff_for_cell_profiler
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:OOPS_AB023_G3Bp1_test
    Overwrite existing files without warning?:No
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