CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Well>[A-F][0-9]{1,2})_(?P<cell_line>.*)_(?P<stressor>.*)_FS1_(?P<marker>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "G3BP1")
    Name to assign these images:G3Bp1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "DCP1A")
    Name to assign these images:DCP1A
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "HUR")
    Name to assign these images:HuR
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:nuclei
    Typical diameter of objects, in pixel units (Min,Max):40,180120
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:4
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
RescaleIntensity:[module_num:6|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
    Select the input image:HuR
    Name the output image:RescaleIntensity_HUR
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.2
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:nuclei
    Name the objects to be identified:cell
    Select the method to identify the secondary objects:Propagation
    Select the input image:RescaleIntensity_HUR
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:5
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:G3Bp1
    Name the primary objects to be identified:SGs
    Typical diameter of objects, in pixel units (Min,Max):3,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.25,1.0
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    Log transform before thresholding?:No
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
RelateObjects:[module_num:9|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
    Parent objects:cell
    Child objects:SGs
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:SG_in_cells
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
MeasureObjectIntensity:[module_num:10|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
    Select images to measure:DCP1A, G3Bp1, HuR
    Select objects to measure:SG_in_cells, SGs, cell

ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|OneDrive - BABRAHAM\\experiments\\OOPS_AB030_CN\\tiff_for_cell_profiler_FS1
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:v2_
    Overwrite existing files without warning?:No
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